# Generated by Configurator on Fri Oct 23 17:38:41 PDT 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM6,SerialManager,COM6
Device,COM16,SerialManager,COM16
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlockBottom,NikonTI,TIFilterBlock1
Device,TIFilterBlockTop,NikonTI,TIFilterBlock2
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,TITIRF,NikonTI,TITIRF
Device,XYStage,ASIStage,XYStage
Device,Excitation,SutterLambda,Wheel-B
Device,Left-EMCCD,Andor,Andor
Device,CSUW1-Hub,CSUW1,CSUW1-Hub
Device,CSUW1-Filter Wheel,CSUW1,CSUW1-Filter Wheel
Device,CSUW1-Dichroic Mirror,CSUW1,CSUW1-Dichroic Mirror
Device,CSUW1-Shutter,CSUW1,CSUW1-Shutter
Device,CSUW1-Drive Speed,CSUW1,CSUW1-Drive Speed
Device,CSUW1-Bright Field,CSUW1,CSUW1-Bright Field
Device,CSUW1-Aperture,CSUW1,CSUW1-Aperture
Device,CSUW1-Magnifier,CSUW1,CSUW1-Magnifier
Device,TriggerScope-Hub,TriggerScope,TriggerScope-Hub
Device,405power-DAC01,TriggerScope,TriggerScope-DAC01
Device,488power-DAC02,TriggerScope,TriggerScope-DAC02
Device,561power-DAC03,TriggerScope,TriggerScope-DAC03
Device,640power-DAC04,TriggerScope,TriggerScope-DAC04
Device,TriggerScope-TTL01,TriggerScope,TriggerScope-TTL01
Device,TriggerScope-TTL02,TriggerScope,TriggerScope-TTL02
Device,TriggerScope-TTL03,TriggerScope,TriggerScope-TTL03
Device,TriggerScope-TTL04,TriggerScope,TriggerScope-TTL04
Device,TriggerScope-TTL05,TriggerScope,TriggerScope-TTL05
Device,State Device Shutter-405,Utilities,State Device Shutter
Device,State Device Shutter-488,Utilities,State Device Shutter
Device,State Device Shutter-561,Utilities,State Device Shutter
Device,State Device Shutter-640,Utilities,State Device Shutter
Device,Shutter-B 10-2,SutterLambda,Shutter-B 10-2
Device,TriggerScope-Focus,TriggerScope,TriggerScope-Focus
Device,TriggerScope-TTL09,TriggerScope,TriggerScope-TTL09
Device,Poly488Shutter,Utilities,State Device Shutter
Device,TriggerScope-DAC09,TriggerScope,TriggerScope-DAC09
Device,TriggerScope-DAC10,TriggerScope,TriggerScope-DAC10
Device,TriggerScope-DAC11,TriggerScope,TriggerScope-DAC11
Device,TriggerScope-DAC12,TriggerScope,TriggerScope-DAC12
Device,TriggerScope-TTL10,TriggerScope,TriggerScope-TTL10
Device,TriggerScope-TTL11,TriggerScope,TriggerScope-TTL11
Device,TriggerScope-TTL12,TriggerScope,TriggerScope-TTL12
Device,Poly630Shutter,Utilities,State Device Shutter
Device,Poly740Shutter,Utilities,State Device Shutter
Device,Poly365Shutter,Utilities,State Device Shutter

# Pre-init settings for devices
Property,COM1,AnswerTimeout,500
Property,COM1,BaudRate,115200
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM1,DataBits,8
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,128000
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM6,DataBits,8
Property,COM16,AnswerTimeout,500.0000
Property,COM16,BaudRate,115200
Property,COM16,DelayBetweenCharsMs,0.0000
Property,COM16,Handshaking,Off
Property,COM16,Parity,None
Property,COM16,StopBits,1
Property,COM16,Verbose,1
Property,COM4,AnswerTimeout,500
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,COM4,DataBits,8
Property,XYStage,Port,COM4
Property,Excitation,Port,COM6
Property,Excitation,Timeout(ms),500
Property,CSUW1-Hub,Port,COM1
Property,CSUW1-Filter Wheel,WheelNumber,1
Property,CSUW1-Magnifier,MagnifierNumber,1
Property,TriggerScope-Hub,Port,COM16
Property,Shutter-B 10-2,Port,COM6
Property,TriggerScope-Focus,Lower Limit,0.0000
Property,TriggerScope-Focus,Upper Limit,150.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlockBottom,TIScope
Parent,TIFilterBlockTop,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,TITIRF,TIScope
Parent,405power-DAC01,TriggerScope-Hub
Parent,488power-DAC02,TriggerScope-Hub
Parent,561power-DAC03,TriggerScope-Hub
Parent,640power-DAC04,TriggerScope-Hub
Parent,TriggerScope-TTL01,TriggerScope-Hub
Parent,TriggerScope-TTL02,TriggerScope-Hub
Parent,TriggerScope-TTL03,TriggerScope-Hub
Parent,TriggerScope-TTL04,TriggerScope-Hub
Parent,TriggerScope-TTL05,TriggerScope-Hub
Parent,TriggerScope-Focus,TriggerScope-Hub
Parent,TriggerScope-TTL09,TriggerScope-Hub
Parent,TriggerScope-DAC09,TriggerScope-Hub
Parent,TriggerScope-DAC10,TriggerScope-Hub
Parent,TriggerScope-DAC11,TriggerScope-Hub
Parent,TriggerScope-DAC12,TriggerScope-Hub
Parent,TriggerScope-TTL10,TriggerScope-Hub
Parent,TriggerScope-TTL11,TriggerScope-Hub
Parent,TriggerScope-TTL12,TriggerScope-Hub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,200.0
Delay,TIFilterBlockBottom,50.0
Delay,TIFilterBlockTop,50.0
Delay,TILightPath,500.0

# Focus directions

# Roles
Property,Core,Camera,Left-EMCCD
Property,Core,Shutter,Poly740Shutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,4,5-Apo TIRF 100x NA 1.49 Oil
Label,TINosePiece,3,4-Apo TIRF 60x NA 1.49 Oil
Label,TINosePiece,2,3-Plan Apo 40x NA 0.95 Dry
Label,TINosePiece,1,2-Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TIFilterBlockBottom
Label,TIFilterBlockBottom,5,6------
Label,TIFilterBlockBottom,4,5-50/50 Split
Label,TIFilterBlockBottom,3,4------
Label,TIFilterBlockBottom,2,3-405/488/561/650 TIRF
Label,TIFilterBlockBottom,1,2-405 TIRF
Label,TIFilterBlockBottom,0,1-ANALY
# TIFilterBlockTop
Label,TIFilterBlockTop,5,6-600sp
Label,TIFilterBlockTop,4,5-YFP
Label,TIFilterBlockTop,3,4-Open
Label,TIFilterBlockTop,2,3-387lp
Label,TIFilterBlockTop,1,2-488lp
Label,TIFilterBlockTop,0,1-Empty
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# Excitation
Label,Excitation,9,500/20
Label,Excitation,8,430/24
Label,Excitation,7,403/12
Label,Excitation,6,572/35
Label,Excitation,5,470/40
Label,Excitation,4,561/10
Label,Excitation,3,490/20
Label,Excitation,2,350/20
Label,Excitation,1,635/20
Label,Excitation,0,555/28
# CSUW1-Filter Wheel
Label,CSUW1-Filter Wheel,9,560/50
Label,CSUW1-Filter Wheel,8,405/488/561/635
Label,CSUW1-Filter Wheel,7,Analyzer
Label,CSUW1-Filter Wheel,6,700/75
Label,CSUW1-Filter Wheel,5,EMPTY
Label,CSUW1-Filter Wheel,4,620/60
Label,CSUW1-Filter Wheel,3,535/30
Label,CSUW1-Filter Wheel,2,525/50
Label,CSUW1-Filter Wheel,1,480/40
Label,CSUW1-Filter Wheel,0,450/50
# CSUW1-Dichroic Mirror
Label,CSUW1-Dichroic Mirror,2,BRIGHTFIELD
Label,CSUW1-Dichroic Mirror,1,TRIPLE
Label,CSUW1-Dichroic Mirror,0,QUAD
# CSUW1-Bright Field
Label,CSUW1-Bright Field,1,Bright Field
Label,CSUW1-Bright Field,0,Confocal
# TriggerScope-TTL09
Label,TriggerScope-TTL09,1,Open
Label,TriggerScope-TTL09,0,Closed

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,CSUW1-Shutter,State,Open
ConfigGroup,System,Startup,CSUW1-Magnifier,State,0
ConfigGroup,System,Startup,405power-DAC01,Volts,1.5000
ConfigGroup,System,Startup,488power-DAC02,Volts,0.6000
ConfigGroup,System,Startup,561power-DAC03,Volts,0.6000
ConfigGroup,System,Startup,640power-DAC04,Volts,1.5000
ConfigGroup,System,Startup,State Device Shutter-405,State Device,TriggerScope-TTL01
ConfigGroup,System,Startup,State Device Shutter-488,State Device,TriggerScope-TTL02
ConfigGroup,System,Startup,State Device Shutter-561,State Device,TriggerScope-TTL03
ConfigGroup,System,Startup,State Device Shutter-640,State Device,TriggerScope-TTL04
ConfigGroup,System,Startup,Poly488Shutter,State Device,TriggerScope-TTL10
ConfigGroup,System,Startup,TriggerScope-DAC09,Volts,0.0000
ConfigGroup,System,Startup,TriggerScope-DAC10,Volts,0.0000
ConfigGroup,System,Startup,TriggerScope-DAC11,Volts,0.0000
ConfigGroup,System,Startup,TriggerScope-DAC12,Volts,0.0000
ConfigGroup,System,Startup,Poly630Shutter,State Device,TriggerScope-TTL11
ConfigGroup,System,Startup,Poly740Shutter,State Device,TriggerScope-TTL12
ConfigGroup,System,Startup,Poly365Shutter,State Device,TriggerScope-TTL09
ConfigGroup,System,Startup,Left-EMCCD,Gain,200


# Group: __LaserPort
# Preset: TIRF
ConfigGroup,__LaserPort,TIRF,TriggerScope-TTL05,State,0

# Preset: Confocal
ConfigGroup,__LaserPort,Confocal,TriggerScope-TTL05,State,1


# Group: _____Poly365 Power
# Preset: NewPreset
ConfigGroup,_____Poly365 Power,NewPreset,TriggerScope-DAC09,Volts,0.0000


# Group: _____640 Power
# Preset: NewPreset
ConfigGroup,_____640 Power,NewPreset,640power-DAC04,Volts,1.0000


# Group: ___Focus
# Preset: TIPFSOffset
ConfigGroup,___Focus,TIPFSOffset,Core,Focus,TIPFSOffset

# Preset: TriggerScope-Focus
ConfigGroup,___Focus,TriggerScope-Focus,Core,Focus,TriggerScope-Focus

# Preset: TIZDrive
ConfigGroup,___Focus,TIZDrive,Core,Focus,TIZDrive


# Group: ____MAG Changer
# Preset: 2X
ConfigGroup,____MAG Changer,2X,CSUW1-Magnifier,Label,Magnifier-2
ConfigGroup,____MAG Changer,2X,Core,Camera,Left-EMCCD

# Preset: 1X
ConfigGroup,____MAG Changer,1X,CSUW1-Magnifier,Label,Magnifier-1
ConfigGroup,____MAG Changer,1X,Core,Camera,Left-EMCCD


# Group: ____PFS offset
# Preset: NewPreset
ConfigGroup,____PFS offset,NewPreset,TIPFSOffset,Position,85.2500


# Group: __ANDOR-Cam_EM_Gain
# Preset: NewPreset
ConfigGroup,__ANDOR-Cam_EM_Gain,NewPreset,Left-EMCCD,Gain,223


# Group: _Confocal
# Preset: 561
ConfigGroup,_Confocal,561,TIFilterBlockBottom,Label,6------
ConfigGroup,_Confocal,561,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_Confocal,561,TILightPath,Label,2-Left100
ConfigGroup,_Confocal,561,Excitation,Label,572/35
ConfigGroup,_Confocal,561,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_Confocal,561,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Confocal,561,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Confocal,561,Core,Camera,Left-EMCCD
ConfigGroup,_Confocal,561,Core,Shutter,State Device Shutter-561
ConfigGroup,_Confocal,561,TriggerScope-TTL05,State,1

# Preset: 488
ConfigGroup,_Confocal,488,TIFilterBlockBottom,Label,6------
ConfigGroup,_Confocal,488,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_Confocal,488,TILightPath,Label,2-Left100
ConfigGroup,_Confocal,488,Excitation,Label,572/35
ConfigGroup,_Confocal,488,CSUW1-Filter Wheel,Label,560/50
ConfigGroup,_Confocal,488,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Confocal,488,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Confocal,488,Core,Camera,Left-EMCCD
ConfigGroup,_Confocal,488,Core,Shutter,State Device Shutter-488
ConfigGroup,_Confocal,488,TriggerScope-TTL05,State,1

# Preset: 640
ConfigGroup,_Confocal,640,TIFilterBlockBottom,Label,6------
ConfigGroup,_Confocal,640,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_Confocal,640,TILightPath,Label,2-Left100
ConfigGroup,_Confocal,640,Excitation,Label,572/35
ConfigGroup,_Confocal,640,CSUW1-Filter Wheel,Label,405/488/561/635
ConfigGroup,_Confocal,640,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Confocal,640,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Confocal,640,Core,Camera,Left-EMCCD
ConfigGroup,_Confocal,640,Core,Shutter,State Device Shutter-640
ConfigGroup,_Confocal,640,TriggerScope-TTL05,State,1

# Preset: DIA
ConfigGroup,_Confocal,DIA,TIFilterBlockBottom,Label,1-ANALY
ConfigGroup,_Confocal,DIA,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_Confocal,DIA,TILightPath,Label,2-Left100
ConfigGroup,_Confocal,DIA,Excitation,Label,572/35
ConfigGroup,_Confocal,DIA,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_Confocal,DIA,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Confocal,DIA,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Confocal,DIA,TriggerScope-TTL05,State,1
ConfigGroup,_Confocal,DIA,Core,Camera,Left-EMCCD
ConfigGroup,_Confocal,DIA,Core,Shutter,Poly740Shutter

# Preset: 405
ConfigGroup,_Confocal,405,TIFilterBlockBottom,Label,6------
ConfigGroup,_Confocal,405,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_Confocal,405,TILightPath,Label,2-Left100
ConfigGroup,_Confocal,405,Excitation,Label,572/35
ConfigGroup,_Confocal,405,CSUW1-Filter Wheel,Label,450/50
ConfigGroup,_Confocal,405,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Confocal,405,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Confocal,405,Core,Camera,Left-EMCCD
ConfigGroup,_Confocal,405,Core,Shutter,State Device Shutter-405
ConfigGroup,_Confocal,405,TriggerScope-TTL05,State,1


# Group: _____Poly480 Power
# Preset: NewPreset
ConfigGroup,_____Poly480 Power,NewPreset,TriggerScope-DAC10,Volts,0.0000


# Group: _____561 Power
# Preset: NewPreset
ConfigGroup,_____561 Power,NewPreset,561power-DAC03,Volts,1.0000


# Group: ___PiezoPosition
# Preset: NewPreset
ConfigGroup,___PiezoPosition,NewPreset,TriggerScope-Focus,Position,75.0000


# Group: _____488 Power
# Preset: NewPreset
ConfigGroup,_____488 Power,NewPreset,488power-DAC02,Volts,1.0000


# Group: __TIRF Angle
# Preset: NewPreset
ConfigGroup,__TIRF Angle,NewPreset,TITIRF,Position,0


# Group: __ANDOR-Cam_Binning
# Preset: 4
ConfigGroup,__ANDOR-Cam_Binning,4,Left-EMCCD,Binning,4

# Preset: 2
ConfigGroup,__ANDOR-Cam_Binning,2,Left-EMCCD,Binning,2

# Preset: 1
ConfigGroup,__ANDOR-Cam_Binning,1,Left-EMCCD,Binning,1

# Preset: 8
ConfigGroup,__ANDOR-Cam_Binning,8,Left-EMCCD,Binning,8


# Group: _TIRF
# Preset: 561
ConfigGroup,_TIRF,561,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,_TIRF,561,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_TIRF,561,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,561,TITIRF,Mirror,In
ConfigGroup,_TIRF,561,Excitation,Label,572/35
ConfigGroup,_TIRF,561,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_TIRF,561,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,561,TriggerScope-TTL05,State,0
ConfigGroup,_TIRF,561,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,561,Core,Shutter,State Device Shutter-561
ConfigGroup,_TIRF,561,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD

# Preset: 488
ConfigGroup,_TIRF,488,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,_TIRF,488,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_TIRF,488,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,488,TITIRF,Mirror,In
ConfigGroup,_TIRF,488,Excitation,Label,572/35
ConfigGroup,_TIRF,488,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,488,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,488,Core,Shutter,State Device Shutter-488
ConfigGroup,_TIRF,488,TriggerScope-TTL05,State,0
ConfigGroup,_TIRF,488,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,_TIRF,488,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD

# Preset: RICM
ConfigGroup,_TIRF,RICM,TIFilterBlockBottom,Label,5-50/50 Split
ConfigGroup,_TIRF,RICM,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_TIRF,RICM,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,RICM,TITIRF,Mirror,Out
ConfigGroup,_TIRF,RICM,Excitation,Label,572/35
ConfigGroup,_TIRF,RICM,CSUW1-Filter Wheel,Label,560/50
ConfigGroup,_TIRF,RICM,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,RICM,TriggerScope-TTL05,State,0
ConfigGroup,_TIRF,RICM,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,RICM,Core,Shutter,Shutter-B 10-2
ConfigGroup,_TIRF,RICM,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD

# Preset: 640
ConfigGroup,_TIRF,640,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,_TIRF,640,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_TIRF,640,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,640,TITIRF,Mirror,In
ConfigGroup,_TIRF,640,Excitation,Label,572/35
ConfigGroup,_TIRF,640,CSUW1-Filter Wheel,Label,700/75
ConfigGroup,_TIRF,640,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,640,TriggerScope-TTL05,State,0
ConfigGroup,_TIRF,640,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,640,Core,Shutter,State Device Shutter-640
ConfigGroup,_TIRF,640,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD

# Preset: DIA
ConfigGroup,_TIRF,DIA,TIFilterBlockBottom,Label,1-ANALY
ConfigGroup,_TIRF,DIA,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_TIRF,DIA,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,DIA,TITIRF,Mirror,In
ConfigGroup,_TIRF,DIA,Excitation,Label,572/35
ConfigGroup,_TIRF,DIA,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_TIRF,DIA,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_TIRF,DIA,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,DIA,TriggerScope-TTL05,State,0
ConfigGroup,_TIRF,DIA,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,DIA,Core,Shutter,Poly740Shutter

# Preset: 405
ConfigGroup,_TIRF,405,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,_TIRF,405,TIFilterBlockTop,Label,1-Empty
ConfigGroup,_TIRF,405,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,405,TITIRF,Mirror,In
ConfigGroup,_TIRF,405,Excitation,Label,572/35
ConfigGroup,_TIRF,405,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,405,TriggerScope-TTL05,State,0
ConfigGroup,_TIRF,405,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,405,Core,Shutter,State Device Shutter-405
ConfigGroup,_TIRF,405,CSUW1-Filter Wheel,Label,450/50
ConfigGroup,_TIRF,405,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD


# Group: _____Poly740 Power
# Preset: NewPreset
ConfigGroup,_____Poly740 Power,NewPreset,TriggerScope-DAC12,Volts,0.0000


# Group: _____405 Power
# Preset: NewPreset
ConfigGroup,_____405 Power,NewPreset,405power-DAC01,Volts,1.0000


# Group: _____Poly630 Power
# Preset: NewPreset
ConfigGroup,_____Poly630 Power,NewPreset,TriggerScope-DAC11,Volts,0.0000



# Group: EPI
# Preset: EPI_RFP
ConfigGroup,EPI,EPI_RFP,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_RFP,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_RFP,Excitation,Label,561/10
ConfigGroup,EPI,EPI_RFP,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,EPI,EPI_RFP,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_RFP,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_RFP,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_RFP,Core,Shutter,Shutter-B 10-2
ConfigGroup,EPI,EPI_RFP,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_RFP,TIFilterBlockTop,Label,1-Empty

# Preset: EPI_GFP
ConfigGroup,EPI,EPI_GFP,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_GFP,Excitation,Label,470/40
ConfigGroup,EPI,EPI_GFP,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_GFP,Core,Shutter,Shutter-B 10-2
ConfigGroup,EPI,EPI_GFP,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_GFP,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,EPI,EPI_GFP,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_GFP,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_GFP,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_GFP,TIFilterBlockTop,Label,1-Empty

# Preset: EPI_DIA
ConfigGroup,EPI,EPI_DIA,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_DIA,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_DIA,CSUW1-Filter Wheel,Label,Analyzer
ConfigGroup,EPI,EPI_DIA,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_DIA,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_DIA,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_DIA,Core,Shutter,Poly630Shutter
ConfigGroup,EPI,EPI_DIA,TIFilterBlockTop,Label,1-Empty
ConfigGroup,EPI,EPI_DIA,TriggerScope-TTL05,State,1

# Preset: EPI_DAPI
ConfigGroup,EPI,EPI_DAPI,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_DAPI,TIFilterBlockTop,Label,1-Empty
ConfigGroup,EPI,EPI_DAPI,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_DAPI,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_DAPI,Excitation,Label,350/20
ConfigGroup,EPI,EPI_DAPI,CSUW1-Filter Wheel,Label,450/50
ConfigGroup,EPI,EPI_DAPI,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_DAPI,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_DAPI,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_DAPI,Core,Shutter,Shutter-B 10-2

# Preset: EPI_mNG
ConfigGroup,EPI,EPI_mNG,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_mNG,Excitation,Label,490/20
ConfigGroup,EPI,EPI_mNG,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_mNG,Core,Shutter,Shutter-B 10-2
ConfigGroup,EPI,EPI_mNG,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_mNG,CSUW1-Filter Wheel,Label,535/30
ConfigGroup,EPI,EPI_mNG,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_mNG,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_mNG,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_mNG,TIFilterBlockTop,Label,1-Empty

# Preset: EPI_DeepRed
ConfigGroup,EPI,EPI_DeepRed,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_DeepRed,TIFilterBlockTop,Label,1-Empty
ConfigGroup,EPI,EPI_DeepRed,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_DeepRed,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_DeepRed,Excitation,Label,635/20
ConfigGroup,EPI,EPI_DeepRed,CSUW1-Filter Wheel,Label,700/75
ConfigGroup,EPI,EPI_DeepRed,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_DeepRed,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_DeepRed,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_DeepRed,Core,Shutter,Shutter-B 10-2

# Preset: EPI_BFP
ConfigGroup,EPI,EPI_BFP,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_BFP,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_BFP,Excitation,Label,403/12
ConfigGroup,EPI,EPI_BFP,CSUW1-Filter Wheel,Label,450/50
ConfigGroup,EPI,EPI_BFP,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_BFP,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_BFP,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_BFP,Core,Shutter,Shutter-B 10-2
ConfigGroup,EPI,EPI_BFP,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_BFP,TIFilterBlockTop,Label,1-Empty


# PixelSize settings
# Resolution preset: andor 20x
ConfigPixelSize,andor 20x,TINosePiece,Label,2-Plan Apo 20x NA 0.75 Dry
ConfigPixelSize,andor 20x,Core,Camera,Left-EMCCD
PixelSize_um,andor 20x,0.6518

# Resolution preset: andor 10x
ConfigPixelSize,andor 10x,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
ConfigPixelSize,andor 10x,Core,Camera,Left-EMCCD
PixelSize_um,andor 10x,1.3076

# Resolution preset: 100x
ConfigPixelSize,100x,TINosePiece,Label,5-Apo TIRF 100x NA 1.49 Oil
ConfigPixelSize,100x,Core,Camera,Left-EMCCD
PixelSize_um,100x,0.2611


